<PlusConfiguration version="2.7">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet
      Name="PlusServer: OptiTrack (Profile only)"
      Description="Broadcasting tracking data through OpenIGTLink."
    />
    <Device
      Id="TrackerDevice"
      Type="OptiTrack"
      ToolReferenceFrame="Tracker" 
      Profile="E:\NousNav\Modules\Scripted\OptiTrack\Resources\Probe.xml"
      AttachToRunningMotive="FALSE"
      MotiveDataDescriptionsUpdateTimeSec="1.0" >
      <DataSources>
        <DataSource Type="Tool" Id="Probe" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
        <DataSource Type="Tool" Id="Probe" />
        </OutputChannel>
      </OutputChannels>
    </Device>
  </DataCollection>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="TRUE"
    OutputChannelId="TrackerStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="ProbeToTracker" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>