<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="PlusServer: Replay OptiTrack data"
      Description="Replay single probe data from OptiTrack." />
    <Device
      Id="TrackedVideoDevice"
      Type="SavedDataSource"
      SequenceFile="D:/D/E/N-1/OptiTrack/PLUS/Ellipse.mha"
      UseData="TRANSFORM"
      AcquisitionRate="10"
      LocalTimeOffsetSec="0.0"
      ToolReferenceFrame="Tracker" 
      UseOriginalTimestamps="FALSE"
      RepeatEnabled="TRUE" >
      <DataSources>
        <DataSource Type="Tool" Id="Probe"  />
      </DataSources>      
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="Probe"/>
        </OutputChannel>
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.igs.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
      </InputChannels>
    </Device>
    
  </DataCollection>

  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    SendValidTransformsOnly="true" 
    OutputChannelId="TrackerStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames> 
        <Transform Name="ProbeToTracker" /> 
      </TransformNames>      
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer> 

</PlusConfiguration>
